OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client "dsi" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1026
#0.Signal stream -> Temporal Filter => #1
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 6
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Channel Selector "1;9;13;14;15" => #2
  Channel List = 1;9;13;14;15
  Action = Select
  Channel Matching Method = Smart
Data=#1 -> Signal display "observation"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Acquisition client "LSL" => #4
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Data=#4.Signal stream, Stimulations=#4.Stimulations -> Signal display "LSL disp"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream, Stimulation=#4.Stimulations -> GDF file writer
  Filename = test_SSVEP-[$core{date}-$core{time}].gdf
Input signal=#2, Input stimulations=#4.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Number_03
-> Matlab Scripting => #8
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2015b/bin/win32/MATLAB.exe
  Matlab working directory = C:/Users/Bio_lab_HG/Desktop/test_9_class/matlab_scripts
  Initialize function = Initialize
  Process function = Process
  Uninitialize function = Uninitialize
Data=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#8 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
