OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client-LSL => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
Data=#0.Signal stream, Stimulations=#0.Stimulations -> Signal display "LSL stream"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#0.Signal stream, Stimulation=#0.Stimulations -> GDF file writer-LSL
  Filename = lsl-[$core{date}-$core{time}].gdf
Acquisition client-EEG => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#3.Signal stream -> Channel Selector "1;7;9;14;15"
  Channel List = 1;7;9;14;15
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Time based epoching
  Epoch duration (in sec) = 3
  Epoch intervals (in sec) = 1
-> Matlab Scripting => #7
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2015b/bin/win32/matlab.exe
  Matlab working directory = C:/Users/Bio_lab_HG/Desktop/190928_startscene/matlab_scripts
  Initialize function = Initialize
  Process function = Process_3
  Uninitialize function = Uninitialize
Data=#7 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#7 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
#3.Signal stream -> Temporal Filter => #10
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Data=#10, Stimulations=#0.Stimulations -> Signal display "with marker"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#3.Signal stream, Stimulation=#0.Stimulations -> GDF file writer-Raw
  Filename = ge-[$core{date}-$core{time}].gdf
