OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)
Comment
  1026
Comment
  1024
Comment
  1025
Comment
  Number_09 from Unity (Scene_change.marker.Write(9))

Acquisition client-P1 => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#0.Signal stream -> Channel Selector "1;7;9;14;15" => #1
  Channel List = 1;7;9;14;15
  Action = Select
  Channel Matching Method = Smart
Acquisition client-P2 => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#2.Signal stream -> Channel Selector "1;7;9;14;15" => #3
  Channel List = 1;7;9;14;15
  Action = Select
  Channel Matching Method = Smart
Input 1=#1, Input 2=#3 -> Signal Merger => #4
-> Temporal Filter => #5
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 4
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
#4 -> Temporal Filter => #6
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
Acquisition client-LSL => #7
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1026
Data=#7.Signal stream, Stimulations=#7.Stimulations -> Signal display "LSL stream"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#5, Input stimulations=#7.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 3
  Epoch offset (in sec) = 0.3
  Stimulation to epoch from = OVTK_StimulationId_Number_09
-> Matlab Scripting => #10
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2015b/bin/win32/matlab.exe
  Matlab working directory = C:/Users/KyunghoWon/Desktop/2p_latest/matlab_scripts
  Initialize function = Initialize
  Process function = Process_2p
  Uninitialize function = Uninitialize
Input signal=#10 -> LSL Export-P1
  Signal stream = openvibeSignal4
  Marker stream = openvibeMarkers
Data=#10 -> Signal display-epoched
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 10
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#6, Stimulations=#7.Stimulations -> Signal display "with marker"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#4, Stimulation=#7.Stimulations -> GDF file writer-Raw
  Filename = ge-[$core{date}-$core{time}].gdf

0x341d3912 Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
