OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client "1P" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1027
#0.Signal stream -> Channel Selector "1;7;9;14;15" => #1
  Channel List = 1;7;9;14;15
  Action = Select
  Channel Matching Method = Index
Acquisition client "2P" => #2
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1028
#2.Signal stream -> Channel Selector "1;7;9;14;15" => #3
  Channel List = 1;7;9;14;15
  Action = Select
  Channel Matching Method = Index
Input 1=#1, Input 2=#3 -> Signal Merger => #4
Acquisition client "LSL" => #5
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1029
Input signal=#4, Input stimulations=#5.Stimulations -> Stimulation based epoching
  Epoch duration (in sec) = 5
  Epoch offset (in sec) = 0.1
  Stimulation to epoch from = OVTK_StimulationId_Number_01
-> Temporal filter "Band stop(59.5-60.5)" => #7
  Filter Method = Butterworth
  Filter Type = Band Stop
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 59.5
  High Cut-off Frequency (Hz) = 60.5
  Band Pass Ripple (dB) = 0.5
-> Temporal Filter => #8
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 0.5
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#7 -> Temporal Filter => #9
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 27
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#7 -> Temporal Filter => #10
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 41
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
#7 -> Temporal Filter => #11
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 55
  High Cut-off Frequency (Hz) = 89
  Band Pass Ripple (dB) = 0.5
Input 1=#8, Input 2=#9, Input 3=#10, Input 4=#11 -> Signal Merger => #12
New input[0]=#12, New input[1]=#5.Stimulations -> Matlab Scripting => #13
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2015b/bin/win32/MATLAB.exe
  Matlab working directory = D:/SSVEP/demo_othello/OpenViBE_Matlab_scripts
  Initialize function = Initialize
  Process function = Process_2P
  Uninitialize function = Uninitialize
Input signal=#13 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
Data=#13 -> Signal display "output"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#4, Stimulations=#5.Stimulations -> Signal display "5Ch+ LSL marker"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
