OpenViBE-Scenario(FormatVersion=1, Creator=OpenViBE Designer, CreatorVersion=2.1.0)

Acquisition client "1P" => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1025
#0.Signal stream -> Temporal Filter
  Filter Method = Butterworth
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 13
  High Cut-off Frequency (Hz) = 40
  Band Pass Ripple (dB) = 0.5
-> Channel Selector "1;7;9;14;15" => #2
  Channel List = 1;7;9;14;15
  Action = Select
  Channel Matching Method = Index
Acquisition client "LSL" => #3
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1028
Data=#3.Signal stream, Stimulations=#3.Stimulations -> Signal display "LSL disp"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Signal=#3.Signal stream, Stimulation=#3.Stimulations -> GDF file writer
  Filename = 1p[$core{date}-$core{time}].gdf
Input signal=#2, Input stimulations=#3.Stimulations -> Stimulation based epoching => #6
  Epoch duration (in sec) = 2
  Epoch offset (in sec) = 0
  Stimulation to epoch from = OVTK_StimulationId_Number_03
Data=#6 -> Signal display "observation"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#6 -> Matlab Scripting => #8
  Box clock frequency in Hz = 1
  Matlab executable (path) = C:/Program Files (x86)/MATLAB/R2015b/bin/win32/MATLAB.exe
  Matlab working directory = C:/Users/Bio_lab_HG/Desktop/August/matlab_scripts
  Initialize function = Initialize
  Process function = Process_3p
  Uninitialize function = Uninitialize
Data=#8 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Input signal=#8 -> LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers
